PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(1.0000, 1.0000, 1.0000)
  expName = CRM_Spat
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine escu
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    ButtonComponent Pasdeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.9, 0.05)
      startVal [time (s)] = 0
      text = Pas d'effort
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    ButtonComponent __1
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.33)
      size = (0.85, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Trespeudeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.26)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      text = Très peu d'effort
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    ButtonComponent __2
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.19)
      size = (0.75, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Peudeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.12)
      size = (0.7, 0.05)
      startVal [time (s)] = 0
      text = Peu d'effort
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    ButtonComponent __3
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.65, 0.04)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Effortmodere
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.02)
      size = (0.55, 0.05)
      startVal [time (s)] = 0
      text = Effort modéré
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    ButtonComponent __4
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, .09)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Effortconsiderable
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.16)
      size = (0.45, 0.05)
      startVal [time (s)] = 0
      text = Effort considérable
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    ButtonComponent __5
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.23)
      size = (0.4, 0.05)
      startVal [time (s)] = 0
      text = ===
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    ButtonComponent Beaucoupdeffort
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (0.35, 0.05)
      startVal [time (s)] = 0
      text = Beaucoup d'effort
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    ButtonComponent Quedubruit
      bold = True
      color = black
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, .4)
      size = (0.3, 0.05)
      startVal [time (s)] = 0
      text = Que du bruit
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  Routine Start
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    TextComponent Starttext
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        SpatFRCMR

        Écoutez les phrases, et reportez la couleur et le chiffre du locuteur qui s'addresse à DELTA.
    ButtonComponent Startbutton
      bold = True
      color = $(-1.0000, -1.0000, -1.0000)
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Commencer la tâche
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  Routine End
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    ButtonComponent EndButton
      bold = True
      color = $(-1.0000, -1.0000, -1.0000)
      fillColor = $(0.3804, 0.5373, 0.7412)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Quitter
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    TextComponent Endtext
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
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      text:
        Tâche terminée!

        Merci!
  Routine bloc_2loc
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    TextComponent text_instruction
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Écouter
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    ButtonComponent R1
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent R2
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent R3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent R4
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent R5
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent R6
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent R7
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent R8
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent B1
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent B2
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent B3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent B4
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent B5
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent B6
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent B7
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent B8
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent V1
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent V2
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent V3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent V4
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent V5
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent V6
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent V7
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent V8
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent J1
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent J2
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent J3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent J4
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent J5
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent J6
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent J7
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent J8
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    SoundComponent Target
      forceEndRoutine = False
      sound [set every repeat] = $Targ
      startVal [time (s)] = 0.5
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    SoundComponent Markser
      forceEndRoutine = False
      sound [set every repeat] = $Mask
      startVal [time (s)] = 0.5
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  Routine bloc_3loc
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    TextComponent text_instruction_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Écouter
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    ButtonComponent R1_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent R2_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent R3_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent R4_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent R5_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent R6_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent R7_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent R8_3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent B1_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent B2_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent B3_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent B4_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent B5_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent B6_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent B7_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent B8_3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent V1_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent V2_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent V3_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent V4_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent V5_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent V6_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent V7_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent V8_3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    ButtonComponent J1_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 1
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    ButtonComponent J2_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 2
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    ButtonComponent J3_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 3
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    ButtonComponent J4_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 4
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    ButtonComponent J5_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 5
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    ButtonComponent J6_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 6
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    ButtonComponent J7_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 7
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    ButtonComponent J8_3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      text = 8
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    SoundComponent Target_2
      forceEndRoutine = False
      sound [set every repeat] = $Targ
      startVal [time (s)] = 0.5
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    SoundComponent Marsker1_2
      forceEndRoutine = False
      sound [set every repeat] = $Mask1
      startVal [time (s)] = 0.5
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    SoundComponent Masker2_2
      forceEndRoutine = False
      sound [set every repeat] = $Mask2
      startVal [time (s)] = 0.5
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Flow
  Routine Start
  LoopInitiator trials_2loc loopType="TrialHandler"
    conditionsFile = conditions/conditions_2loc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Delta_Vert_3', 'Mask': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask': -30},
      {'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T1_M_Delta_Vert_3', 'Mask': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask': -30},
      {'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T2_M_Delta_Vert_3', 'Mask': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask': -30}]
    Routine bloc_2loc
    Routine escu
  LoopTerminator trials_2loc
  LoopInitiator trials_3loc loopType="TrialHandler"
    conditionsFile = conditions/conditions_3loc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Delta_Vert_3', 'Mask1': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'Mask2': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask1': -30, 'AnglMask2': -30},
      {'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T1_M_Delta_Vert_3', 'Mask1': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'Mask2': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask1': -30, 'AnglMask2': -30},
      {'Targ': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T2_M_Delta_Vert_3', 'Mask1': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'Mask2': 'E:\\ACERI\\LE_EF_EEG\\LE_EF\\CRMLE\\external_files\\sound\\FR\\T0_M_Alpha_Rouge_1', 'AnglTarg': 30, 'AnglMask1': -30, 'AnglMask2': -30}]
    Routine bloc_3loc
    Routine escu
  LoopTerminator trials_3loc
  Routine End
